PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Sandi_Interface
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent Boton_Amarillo
      image = Assets/boton_amarillo.png
      pos = (0.33, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Boton_Rojo
      image = Assets/boton_rojo.png
      pos = (0.54, -0.30)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Conteo_1
      image = Assets/circulo_verde.png
      pos = (0, -0.32)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Botones
      image [set every repeat] = $Botones_Random
      pos = (0, 0.1)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    TextComponent Cuenta_tarea1
      letterHeight = 0.08
      pos = (0, -0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $contador
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        contador = 1;
      Begin Routine:
        contador = contador + 1

        respuesta = ""
        respuesta_recibida = False

        feedbackPlayed = False
        feedbackStart = None

        esp32.reset_input_buffer()
      Each Frame:
        if not respuesta_recibida:

            if esp32.in_waiting > 0:

                try:
                    dato = esp32.readline().decode(errors='ignore').strip()

                    print(dato)

                    if dato in ["AMARILLO", "ROJO", "EMPTY"]:

                        respuesta = dato
                        respuesta_recibida = True

                        feedbackStart = t

                except Exception as e:
                    print(e)


        # Si no respondieron y se acabó el tiempo
        if t >= 1.3 and not respuesta_recibida:

            respuesta = 'NONE'
            respuesta_recibida = True

            feedbackStart = t


        # Reproducir feedback UNA sola vez
        if respuesta_recibida and not feedbackPlayed:

            if respuesta == Correct:
                feedback.setSound('correct.mp3')
            else:
                feedback.setSound('incorrect.mp3')

            feedback.play()

            feedbackPlayed = True


        # Esperar 0.5 s y terminar rutina
        if feedbackPlayed and t >= feedbackStart + 0.5:

            continueRoutine = False
      End Routine:
        thisExp.addData('respuesta', respuesta)
    SoundComponent feedback
      forceEndRoutine = False
      sound [set every repeat] = incorrect.mp3
      startVal [condition] = $False
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    CodeComponent Timestamps2
      Code Type = Auto->JS
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      Begin Routine:
        marker_outlet.push_sample(['botones_trial_start'])
        print("EEG marker sent: botones_trial_start")
      End Routine:
        marker_outlet.push_sample(['botones_trial_end'])
        print("EEG marker sent: botones_trial_end")
  Routine Start
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    ImageComponent Boton_Amarillo_Start
      image = Assets/boton_amarillo.png
      pos = (0.33, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Boton_Rojo_Start
      image = Assets/boton_rojo.png
      pos = (0.54, -0.30)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Indicaciones
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@ a Sandhi Interface!
        Sigue las indicaciones que te aparecerán en pantalla.
        ¡Presiona el botón verde para iniciar!
    MouseComponent mouse_2
      clickable = play
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play
      image = Assets/Inicio.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
  Routine Instrucciones
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    ImageComponent Boton_Amarillo_Start_2
      image = Assets/boton_amarillo.png
      pos = (0.33, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Boton_Rojo_Start_2
      image = Assets/boton_rojo.png
      pos = (0.54, -0.30)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Indicaciones_2
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        • En la botonera presiona el botón del color que aparece en pantalla.

        • Si sale un color distinto al amarillo o al rojo, no deberás presionar ningún botón.

        •Tienes 1.5s para seleccionar el botón

        Presiona el botón verde para empezar
    MouseComponent mouse_4
      clickable = play_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play_2
      image = Assets/Inicio.png
      pos = (0, -0.20)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine Instrucciones_2
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    TextComponent Indicaciones_3
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        • Tienes 2 segundos para mover la palanca en la dirección que indica la flecha.

        • Solo puedes realizar movimientos hacia arriba, abajo, derecha e izquierda.

        • Después de cada movimiento, regresa la palanca a la posición inicial (Puedes mover las palancas para entender el movimiento antes de empezar).

        Presiona el botón verde para comenzar.
    MouseComponent mouse
      clickable = play_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play_3
      image = Assets/Inicio.png
      pos = (0, -0.20)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent Arriba_Start_2
      image = Assets/arriba.png
      pos = (0.33, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Abajo_Start_2
      image = Assets/abajo.png
      pos = (0.54, -0.30)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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  Routine Start_2
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    ImageComponent Arriba_Start
      image = Assets/arriba.png
      pos = (0.33, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Abajo_Start
      image = Assets/abajo.png
      pos = (0.54, -0.30)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Indicaciones_4
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@ al experimento!
        Sigue las indicaciones que te aparecerán en pantalla.
        ¡Presiona el botón verde para iniciar!
    MouseComponent mouse_3
      clickable = play
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play_4
      image = Assets/Inicio.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
  Routine trial_2
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    ImageComponent Izquierda
      image = Assets/izquierda.png
      pos = (-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine Trial_2
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    ImageComponent Conteo
      image = Assets/circulo_verde.png
      pos = (0, -0.32)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Izquierda_2
      image = Assets/izquierda.png
      pos = (-0.5, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Derecha
      image = Assets/derecha.png
      pos = (-0.3, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent Arriba
      image = Assets/arriba.png
      pos = (0.4, -0.1)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Abajo
      image = Assets/abajo.png
      pos = (0.4, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent Instruccion
      image [set every repeat] = $Flechas_Random
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent Cuenta_tarea2
      letterHeight = 0.08
      pos = (0, -0.32)
      startVal [time (s)] = 0.0
      text [set every repeat] = $contador
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        contador1 = 1;
      Begin Routine:
        contador1 = contador1 + 1;
        respuesta = ""
        respuesta_recibida = False
        feedbackPlayed = False
        feedbackStart = None
        esp32_1.reset_input_buffer()
      Each Frame:
        if not respuesta_recibida:

            if esp32_1.in_waiting > 0:

                try:

                    dato = esp32_1.readline().decode(errors='ignore').strip()

                    print(dato)

                    if dato in ["ARRIBA", "ABAJO", "IZQUIERDA", "DERECHA"]:

                        respuesta = dato

                        respuesta_recibida = True

                        feedbackStart = t

                except:
                    pass

        if t >= 1.6 and not respuesta_recibida:

            respuesta = 'NONE'
            respuesta_recibida = True

            feedbackStart = t

        if respuesta_recibida and not feedbackPlayed:

            if respuesta == Correct:
                feedback_2.setSound('correct.mp3')
            else:
                feedback_2.setSound('incorrect.mp3')

            feedback_2.play()

            feedbackPlayed = True


        # Esperar 0.5 s y terminar rutina
        if feedbackPlayed and t >= feedbackStart + 0.5:

            continueRoutine = False
      End Experiment:
        esp32.close()
        esp32_1.close()
      End Routine:
        thisExp.addData('respuesta', respuesta)
    SoundComponent feedback_2
      forceEndRoutine = False
      sound [set every repeat] = incorrect.mp3
      startVal [condition] = $False
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    CodeComponent Timestamps_3
      Code Type = Auto->JS
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      Begin Routine:
        marker_outlet.push_sample(['palancas_start'])
        print("EEG marker sent: palancas_start")
      End Routine:
        marker_outlet.push_sample(['palancas_trial_end'])
        print("EEG marker sent: palancas_trial_end")
  Routine Start_3
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    TextComponent Indicaciones_5
      letterHeight = 0.05
      pos = (0, 0.36)
      startVal [time (s)] = 0.0
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      text:
        ¡Bienvenid@ a Sandhi Interface!
        Sigue las indicaciones que te aparecerán en pantalla.
        ¡Presiona el botón verde para iniciar!
    MouseComponent mouse_5
      clickable = play
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play_5
      image = Assets/Inicio.png
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        import serial

        esp32 = serial.Serial('COM3', 115200, timeout=0.01)
        esp32_1 = serial.Serial('COM5', 115200, timeout=0.01)
    CodeComponent EEG_Start_Code
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet
        import time

        info = StreamInfo(
            name='PsychoPyMarkers',
            type='Markers',
            channel_count=1,
            nominal_srate=0,
            channel_format='string',
            source_id='psychopy_marker_stream'
        )

        marker_outlet = StreamOutlet(info)

        time.sleep(0.5)
      Begin Experiment:
        marker_outlet.push_sample(['experiment_start'])
        print("EEG marker sent: experiment_start")
  Routine Instrucciones_3
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    TextComponent Indicaciones_6
      letterHeight = 0.05
      pos = (0, 0.34)
      startVal [time (s)] = 0.0
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      text:
        • Tienes 3 segundos para identificar la emoción mostrada en la imagen.
        • Utiliza el slider para registrar tu respuesta.
        Presiona el botón verde para comenzar.
    MouseComponent mouse_6
      clickable = play_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    ImageComponent play_6
      image = Assets/Inicio.png
      pos = (0, -0.20)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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  Routine trial_3
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    ImageComponent Instruccion_2
      image [set every repeat] = $Emociones
      pos = (0, 0.2)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent Cuenta_tarea3
      letterHeight = 0.08
      pos = (0, -0.32)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $contador
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        contador = 1;
      Begin Routine:
        contador = contador + 1;
        respuesta = ""
        respuesta_recibida = False
        esp32.reset_input_buffer()
      End Experiment:
        esp32.close()
      End Routine:
        thisExp.addData('respuesta', respuesta)
    SliderComponent slider
      color = $(-1.0000, -1.0000, -1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = ('Alegría', 'Sorpresa', 'Desagrado', 'Tristeza')
      letterHeight = 0.04
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      styles = rating
      ticks = (1, 2, 3, 4)
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    CodeComponent Timestamps
      Code Type = Auto->JS
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      Begin Routine:
        marker_outlet.push_sample(['emociones_trial_start'])
        print("EEG marker sent: emociones_trial_start")
      End Routine:
        marker_outlet.push_sample(['emociones_trial_end'])
        print("EEG marker sent: emociones_trial_end")
  Routine Feed
    RoutineSettingsComponent Feed
      disabled = True
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if not respuesta_recibida:
            respuesta = 'NONE'

        if respuesta == Correct:
            feedbackSound = 'correct.mp3'
        else:
            feedbackSound = 'incorrect.mp3'
    SoundComponent feedback11
      forceEndRoutine = False
      sound [set every repeat] = $feedbackSound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Start_3
  Routine Instrucciones_3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Trial_3.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Emociones', 'Assets/Felicidad.jpg'), ('Correcta', np.int64(1))]),
      OrderedDict([('Emociones', 'Assets/Sorpresa.jpg'), ('Correcta', np.int64(2))]),
      OrderedDict([('Emociones', 'Assets/Desagrado.jpg'), ('Correcta', np.int64(3))]),
      OrderedDict([('Emociones', 'Assets/Tristeza.jpg'), ('Correcta', np.int64(4))])]
    Routine trial_3
  LoopTerminator trials_3
  Routine Start
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trial_1.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Botones_Random', 'Assets/boton_rojo.png'), ('Correct', 'ROJO')]),
      OrderedDict([('Botones_Random', 'Assets/boton_amarillo.png'), ('Correct', 'AMARILLO')]),
      OrderedDict([('Botones_Random', 'Assets/boton_rojo.png'), ('Correct', 'ROJO')]),
      OrderedDict([('Botones_Random', 'Assets/boton_azul.png'), ('Correct', None)]),
      OrderedDict([('Botones_Random', 'Assets/boton_rojo.png'), ('Correct', 'ROJO')]),
      OrderedDict([('Botones_Random', 'Assets/boton_azul.png'), ('Correct', None)]),
      OrderedDict([('Botones_Random', 'Assets/boton_amarillo.png'), ('Correct', 'AMARILLO')]),
      OrderedDict([('Botones_Random', 'Assets/boton_verde.png'), ('Correct', None)]),
      OrderedDict([('Botones_Random', 'Assets/boton_verde.png'), ('Correct', None)])]
    Routine trial
  LoopTerminator trials
  Routine Start_2
  Routine Instrucciones_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Trial_2.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('Flechas_Random', 'arriba.png'), ('Correct', 'ARRIBA')]),
      OrderedDict([('Flechas_Random', 'abajo.png'), ('Correct', 'ABAJO')]),
      OrderedDict([('Flechas_Random', 'derecha.png'), ('Correct', 'DERECHA')]),
      OrderedDict([('Flechas_Random', 'izquierda.png'), ('Correct', 'IZQUIERDA')])]
    Routine Trial_2
  LoopTerminator trials_2
